# Importación de archivos CAD
# BodyFlex Model 317 - BluePhysics

# Jacket

s:Ge/BodyFlexM317/Jacket/Parent = "BodyFlexM317"
s:Ge/BodyFlexM317/Jacket/Material = "Air"
s:Ge/BodyFlexM317/Jacket/Type = "TsCAD"
s:Ge/BodyFlexM317/Jacket/InputFile = "Includes/Geometries/BodyFlexModel317/Jacket"
s:Ge/BodyFlexM317/Jacket/FileFormat = "stl"
d:Ge/BodyFlexM317/Jacket/Units = 1. mm
d:Ge/BodyFlexM317/Jacket/TransX = 0. mm
d:Ge/BodyFlexM317/Jacket/TransY = 0. mm
d:Ge/BodyFlexM317/Jacket/TransZ = 0. mm
d:Ge/BodyFlexM317/Jacket/RotX = 0. deg
d:Ge/BodyFlexM317/Jacket/RotY = 0. deg
d:Ge/BodyFlexM317/Jacket/RotZ = 0. deg
s:Ge/BodyFlexM317/Jacket/Color = "gray"
s:Ge/BodyFlexM317/Jacket/DrawingStyle = "Wireframe"
