# SIMULACIÓN COBALTO-60 - SIN DETECTOR

# El propósito de la presente simulación es simular un procedimiento de calibración dosimétrica usando un haz de referencia producido por una fuente de Co-60, El haz de referencia irradia un cubo de agua de 30x30x30 cm3 a distintas distancias entre la fuente y la superficie (SSD) y con diferentes tamaños de campo incidente

# INCLUDES:

# Geometrías:
includeFile = Includes/Geometries/Jaws.txt # Mandíbulas
#includeFile = Includes/Geometries/MLC.txt # Colimador multihoja
includeFile = Includes/Geometries/BodyFlex_M317.txt # Detector BluePhysics M317
includeFile = Includes/Geometries/WaterPhantomBox.txt # Fantoma - Cubo
#includeFile = Includes/Geometries/WaterPhantomPTW_41023.txt # Fantoma - PTW Type 41023

# Fuente:
includeFile = Includes/Source/PhaseSpaceSource.txt

# Scoring:
#includeFile = Includes/Scoring/PhaseSpaceScoring.txt

# CONFIGURACIÓN:

# Configuración Gráfica:
s:Gr/ViewA/Type = "OpenGL"
iv:Gr/Color/TransparentRed = 4 255 0 255 200
iv:Gr/Color/TransparentBlue = 4 0 0 255 200
i:Gr/ViewA/WindowSizeX = 900
i:Gr/ViewA/WindowSizeY = 900
u:Gr/ViewA/Zoom = 2.
d:Gr/ViewA/Theta = 90. deg
d:Gr/ViewA/Phi = 0. deg
s:Gr/ViewA/Projection = "Perspective"
d:Gr/ViewA/PerspectiveAngle = 0. deg
b:Gr/ViewA/IncludeAxes = "True"
d:Gr/ViewA/AxesSize = 1. cm
s:Gr/ViewA/AxesComponent = "World"

# Física:
sv:Ph/Default/Modules = 1 "g4em-standard_opt4"

# Control General:
i:Ts/Seed = 1
i:Ts/ShowHistoryCountAtInterval = 100000
b:Gr/Enable = "True"
b:Ts/UseQt = "True" # Cambiar a "False" para desactivar la Interfaz Gráfica
#b:Gr/Enable = "False"
#b:Ts/UseQt = "False"
i:Ts/NumberOfThreads = 0
b:Ts/ShowCPUTime = "True"

# Definición del World:
s:Ge/World/Material = "Air"
d:Ge/World/LX = 5. m
d:Ge/World/LY = 5. m
d:Ge/World/LZ = 5. m
b:Ge/World/Invisible = "True"

# Configuración Espacial:
d:Ge/SSD = 100. cm

# SISTEMAS DE COORDENADAS - IEC 61217 (2011):

## Coordenadas Fijas - IEC_F
s:Ge/IEC_F/Type = "Group"
s:Ge/IEC_F/Parent = "World"
d:Ge/IEC_F/TransX = 0. cm
d:Ge/IEC_F/TransY = 0. cm
d:Ge/IEC_F/TransZ = 0. cm

## Coordenadas Gantry - IEC_G
s:Ge/IEC_G/Type = "Group"
s:Ge/IEC_G/Parent = "IEC_F"
d:Ge/IEC_G/TransX = 0. cm
d:Ge/IEC_G/TransY = 0. cm
d:Ge/IEC_G/TransZ = 0. cm
dc:Ge/IEC_G/RotX = 0. deg
dc:Ge/IEC_G/RotY = 0. deg

## Coordenadas Colimación Haz - IEC_B
s:Ge/IEC_B/Type = "Group"
s:Ge/IEC_B/Parent = "IEC_G"
d:Ge/IEC_B/TransX = 0. cm
d:Ge/IEC_B/TransY = 0. cm
dc:Ge/IEC_B/TransZ = 0. cm
dc:Ge/IEC_B/RotZ = 0. deg

## Coordenadas Soporte - IEC_S
s:Ge/IEC_S/Type = "Group"
s:Ge/IEC_S/Parent = "IEC_F"
d:Ge/IEC_S/TransX = 0. cm
dc:Ge/IEC_S/TransY = 0. cm
d:Ge/IEC_S/TransZ = 0. cm
dc:Ge/IEC_S/RotZ = 0. deg

## Coordenadas Paciente - IEC_P
s:Ge/IEC_P/Type = "Group"
s:Ge/IEC_P/Parent = "IEC_S"
dc:Ge/IEC_P/TransX = 0. cm
dc:Ge/IEC_P/TransY = 0. cm
dc:Ge/IEC_P/TransZ = -15. cm
dc:Ge/IEC_P/RotX = 0. deg
dc:Ge/IEC_P/RotY = 0. deg
dc:Ge/IEC_P/RotZ = 0. deg
